# Generated by Configurator on Mon Jul 06 15:41:59 CEST 2015

# Reset
Property,Core,Initialize,0

# Devices
Device,COM9,SerialManager,COM9
Device,COM7,SerialManager,COM7
Device,COM3,SerialManager,COM3
Device,NikonTi,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TICondenserCassette,NikonTI,TICondenserCassette
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,SpectraX,LumencorSpectra,Spectra
Device,Hamamatsu_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,DIA LED (Trek5),UserDefinedSerial,UserDefinedShutter

# Pre-init settings for devices
Property,COM9,AnswerTimeout,500.0000
Property,COM9,BaudRate,9600
Property,COM9,DelayBetweenCharsMs,0.0000
Property,COM9,Handshaking,Off
Property,COM9,Parity,None
Property,COM9,StopBits,1
Property,COM9,Verbose,1
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,9600
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,SpectraX,Port,COM7
Property,SpectraX,SetLE_Type,SpectraX
Property,DIA LED (Trek5),Close-command,G
Property,DIA LED (Trek5),Close-response,
Property,DIA LED (Trek5),Command mode,ASCII-no-terminator
Property,DIA LED (Trek5),Initialize-command,
Property,DIA LED (Trek5),Initialize-response,
Property,DIA LED (Trek5),Open-command,F
Property,DIA LED (Trek5),Open-response,
Property,DIA LED (Trek5),Port,COM9
Property,DIA LED (Trek5),QueryState-closed-response,
Property,DIA LED (Trek5),QueryState-command,
Property,DIA LED (Trek5),QueryState-open-response,
Property,DIA LED (Trek5),Response detection,Ignore responses
Property,DIA LED (Trek5),Shutdown-command,
Property,DIA LED (Trek5),Shutdown-response,

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TINosePiece,NikonTi
Parent,TICondenserCassette,NikonTi
Parent,TIFilterBlock1,NikonTi
Parent,TILightPath,NikonTi
Parent,TIZDrive,NikonTi
Parent,TIXYDrive,NikonTi
Parent,TIPFSOffset,NikonTi
Parent,TIPFSStatus,NikonTi

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TINosePiece,250.0
Delay,TICondenserCassette,250.0
Delay,TIFilterBlock1,250.0
Delay,TILightPath,250.0

# Roles
Property,Core,Camera,Hamamatsu_DCAM
Property,Core,Shutter,DIA LED (Trek5)
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Unknown
Label,TINosePiece,4,5-Unknown
Label,TINosePiece,3,4-Unknown
Label,TINosePiece,2,3-Plan Apo 60x NA 1.40 Oil
Label,TINosePiece,1,2-Plan Apo 100x NA 1.45 Oil
Label,TINosePiece,0,1-Plan Fluor 10x NA 0.30 Dry
# TICondenserCassette
Label,TICondenserCassette,4,5------
Label,TICondenserCassette,3,4-MC1
Label,TICondenserCassette,2,3-Ph3
Label,TICondenserCassette,1,2-Ph1
Label,TICondenserCassette,0,1------
# TIFilterBlock1
Label,TIFilterBlock1,5,6------
Label,TIFilterBlock1,4,5-mChe
Label,TIFilterBlock1,3,4-YFPhq
Label,TIFilterBlock1,2,3-GFPHQ
Label,TIFilterBlock1,1,2-CFP
Label,TIFilterBlock1,0,1-DAPI
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: PFS Offset
# Preset: NewPreset
ConfigGroup,PFS Offset,NewPreset,TIPFSOffset,Position,164.5250


# Group:  Illumination
# Preset: mCherry 3%
ConfigGroup, Illumination,mCherry 3%,TIFilterBlock1,Label,5-mChe
ConfigGroup, Illumination,mCherry 3%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,mCherry 3%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,mCherry 3%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,mCherry 3%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,mCherry 3%,SpectraX,Green_Enable,1
ConfigGroup, Illumination,mCherry 3%,SpectraX,Green_Level,3
ConfigGroup, Illumination,mCherry 3%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,mCherry 3%,SpectraX,Red_Level,100
ConfigGroup, Illumination,mCherry 3%,SpectraX,State,0
ConfigGroup, Illumination,mCherry 3%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,mCherry 3%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,mCherry 3%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,mCherry 3%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,mCherry 3%,Core,Shutter,SpectraX
ConfigGroup, Illumination,mCherry 3%,Core,AutoShutter,1

# Preset:  DIA (GFP)
ConfigGroup, Illumination, DIA (GFP),TIFilterBlock1,Label,3-GFPHQ
ConfigGroup, Illumination, DIA (GFP),SpectraX,Blue_Enable,0
ConfigGroup, Illumination, DIA (GFP),SpectraX,Blue_Level,100
ConfigGroup, Illumination, DIA (GFP),SpectraX,Cyan_Enable,0
ConfigGroup, Illumination, DIA (GFP),SpectraX,Cyan_Level,100
ConfigGroup, Illumination, DIA (GFP),SpectraX,Green_Enable,0
ConfigGroup, Illumination, DIA (GFP),SpectraX,Green_Level,100
ConfigGroup, Illumination, DIA (GFP),SpectraX,Red_Enable,0
ConfigGroup, Illumination, DIA (GFP),SpectraX,Red_Level,100
ConfigGroup, Illumination, DIA (GFP),SpectraX,Teal_Enable,0
ConfigGroup, Illumination, DIA (GFP),SpectraX,Teal_Level,100
ConfigGroup, Illumination, DIA (GFP),SpectraX,Violet_Enable,0
ConfigGroup, Illumination, DIA (GFP),SpectraX,Violet_Level,100
ConfigGroup, Illumination, DIA (GFP),Core,Shutter,DIA LED (Trek5)
ConfigGroup, Illumination, DIA (GFP),SpectraX,State,0
ConfigGroup, Illumination, DIA (GFP),Core,AutoShutter,1

# Preset: GFP 9%
ConfigGroup, Illumination,GFP 9%,TIFilterBlock1,Label,3-GFPHQ
ConfigGroup, Illumination,GFP 9%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,GFP 9%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,GFP 9%,SpectraX,Cyan_Enable,1
ConfigGroup, Illumination,GFP 9%,SpectraX,Cyan_Level,9
ConfigGroup, Illumination,GFP 9%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,GFP 9%,SpectraX,Green_Level,100
ConfigGroup, Illumination,GFP 9%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,GFP 9%,SpectraX,Red_Level,100
ConfigGroup, Illumination,GFP 9%,SpectraX,State,0
ConfigGroup, Illumination,GFP 9%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,GFP 9%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,GFP 9%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,GFP 9%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,GFP 9%,Core,Shutter,SpectraX
ConfigGroup, Illumination,GFP 9%,Core,AutoShutter,1

# Preset:  DIA
ConfigGroup, Illumination, DIA,SpectraX,Blue_Enable,0
ConfigGroup, Illumination, DIA,SpectraX,Blue_Level,100
ConfigGroup, Illumination, DIA,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination, DIA,SpectraX,Cyan_Level,100
ConfigGroup, Illumination, DIA,SpectraX,Green_Enable,0
ConfigGroup, Illumination, DIA,SpectraX,Green_Level,100
ConfigGroup, Illumination, DIA,SpectraX,Red_Enable,0
ConfigGroup, Illumination, DIA,SpectraX,Red_Level,100
ConfigGroup, Illumination, DIA,SpectraX,Teal_Enable,0
ConfigGroup, Illumination, DIA,SpectraX,Teal_Level,100
ConfigGroup, Illumination, DIA,SpectraX,Violet_Enable,0
ConfigGroup, Illumination, DIA,SpectraX,Violet_Level,100
ConfigGroup, Illumination, DIA,Core,Shutter,DIA LED (Trek5)
ConfigGroup, Illumination, DIA,TIFilterBlock1,Label,6------
ConfigGroup, Illumination, DIA,SpectraX,State,0
ConfigGroup, Illumination, DIA,Core,AutoShutter,1

# Preset: GFP 3%
ConfigGroup, Illumination,GFP 3%,TIFilterBlock1,Label,3-GFPHQ
ConfigGroup, Illumination,GFP 3%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,GFP 3%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,GFP 3%,SpectraX,Cyan_Enable,1
ConfigGroup, Illumination,GFP 3%,SpectraX,Cyan_Level,3
ConfigGroup, Illumination,GFP 3%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,GFP 3%,SpectraX,Green_Level,100
ConfigGroup, Illumination,GFP 3%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,GFP 3%,SpectraX,Red_Level,100
ConfigGroup, Illumination,GFP 3%,SpectraX,State,0
ConfigGroup, Illumination,GFP 3%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,GFP 3%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,GFP 3%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,GFP 3%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,GFP 3%,Core,Shutter,SpectraX
ConfigGroup, Illumination,GFP 3%,Core,AutoShutter,1

# Preset: mCherry 5%
ConfigGroup, Illumination,mCherry 5%,TIFilterBlock1,Label,5-mChe
ConfigGroup, Illumination,mCherry 5%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,mCherry 5%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,mCherry 5%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,mCherry 5%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,mCherry 5%,SpectraX,Green_Enable,1
ConfigGroup, Illumination,mCherry 5%,SpectraX,Green_Level,5
ConfigGroup, Illumination,mCherry 5%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,mCherry 5%,SpectraX,Red_Level,100
ConfigGroup, Illumination,mCherry 5%,SpectraX,State,0
ConfigGroup, Illumination,mCherry 5%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,mCherry 5%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,mCherry 5%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,mCherry 5%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,mCherry 5%,Core,Shutter,SpectraX
ConfigGroup, Illumination,mCherry 5%,Core,AutoShutter,1

# Preset:  DIA (mCherry)
ConfigGroup, Illumination, DIA (mCherry),TIFilterBlock1,Label,5-mChe
ConfigGroup, Illumination, DIA (mCherry),SpectraX,Blue_Enable,0
ConfigGroup, Illumination, DIA (mCherry),SpectraX,Blue_Level,100
ConfigGroup, Illumination, DIA (mCherry),SpectraX,Cyan_Enable,0
ConfigGroup, Illumination, DIA (mCherry),SpectraX,Cyan_Level,100
ConfigGroup, Illumination, DIA (mCherry),SpectraX,Green_Enable,0
ConfigGroup, Illumination, DIA (mCherry),SpectraX,Green_Level,100
ConfigGroup, Illumination, DIA (mCherry),SpectraX,Red_Enable,0
ConfigGroup, Illumination, DIA (mCherry),SpectraX,Red_Level,100
ConfigGroup, Illumination, DIA (mCherry),SpectraX,State,0
ConfigGroup, Illumination, DIA (mCherry),SpectraX,Teal_Enable,0
ConfigGroup, Illumination, DIA (mCherry),SpectraX,Teal_Level,100
ConfigGroup, Illumination, DIA (mCherry),SpectraX,Violet_Enable,0
ConfigGroup, Illumination, DIA (mCherry),SpectraX,Violet_Level,100
ConfigGroup, Illumination, DIA (mCherry),Core,Shutter,DIA LED (Trek5)
ConfigGroup, Illumination, DIA (mCherry),Core,AutoShutter,1

# Preset: DAPI 9%
ConfigGroup, Illumination,DAPI 9%,TIFilterBlock1,Label,1-DAPI
ConfigGroup, Illumination,DAPI 9%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,DAPI 9%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,DAPI 9%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,DAPI 9%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,DAPI 9%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,DAPI 9%,SpectraX,Green_Level,0
ConfigGroup, Illumination,DAPI 9%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,DAPI 9%,SpectraX,Red_Level,100
ConfigGroup, Illumination,DAPI 9%,SpectraX,State,0
ConfigGroup, Illumination,DAPI 9%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,DAPI 9%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,DAPI 9%,SpectraX,Violet_Enable,1
ConfigGroup, Illumination,DAPI 9%,SpectraX,Violet_Level,9
ConfigGroup, Illumination,DAPI 9%,Core,Shutter,SpectraX
ConfigGroup, Illumination,DAPI 9%,Core,AutoShutter,1

# Preset: RFP 99%
ConfigGroup, Illumination,RFP 99%,TIFilterBlock1,Label,5-mChe
ConfigGroup, Illumination,RFP 99%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,RFP 99%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,RFP 99%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,RFP 99%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,RFP 99%,SpectraX,Green_Enable,1
ConfigGroup, Illumination,RFP 99%,SpectraX,Green_Level,99
ConfigGroup, Illumination,RFP 99%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,RFP 99%,SpectraX,Red_Level,100
ConfigGroup, Illumination,RFP 99%,SpectraX,State,0
ConfigGroup, Illumination,RFP 99%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,RFP 99%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,RFP 99%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,RFP 99%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,RFP 99%,Core,AutoShutter,1
ConfigGroup, Illumination,RFP 99%,Core,Shutter,SpectraX

# Preset: GFP 5%
ConfigGroup, Illumination,GFP 5%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,GFP 5%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,GFP 5%,SpectraX,Cyan_Enable,1
ConfigGroup, Illumination,GFP 5%,SpectraX,Cyan_Level,5
ConfigGroup, Illumination,GFP 5%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,GFP 5%,SpectraX,Green_Level,100
ConfigGroup, Illumination,GFP 5%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,GFP 5%,SpectraX,Red_Level,100
ConfigGroup, Illumination,GFP 5%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,GFP 5%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,GFP 5%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,GFP 5%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,GFP 5%,Core,Shutter,SpectraX
ConfigGroup, Illumination,GFP 5%,TIFilterBlock1,Label,3-GFPHQ
ConfigGroup, Illumination,GFP 5%,SpectraX,State,0
ConfigGroup, Illumination,GFP 5%,Core,AutoShutter,1

# Preset: GFP 17%
ConfigGroup, Illumination,GFP 17%,TIFilterBlock1,Label,3-GFPHQ
ConfigGroup, Illumination,GFP 17%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,GFP 17%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,GFP 17%,SpectraX,Cyan_Enable,1
ConfigGroup, Illumination,GFP 17%,SpectraX,Cyan_Level,17
ConfigGroup, Illumination,GFP 17%,SpectraX,Green_Enable,0
ConfigGroup, Illumination,GFP 17%,SpectraX,Green_Level,100
ConfigGroup, Illumination,GFP 17%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,GFP 17%,SpectraX,Red_Level,100
ConfigGroup, Illumination,GFP 17%,SpectraX,State,0
ConfigGroup, Illumination,GFP 17%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,GFP 17%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,GFP 17%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,GFP 17%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,GFP 17%,Core,Shutter,SpectraX
ConfigGroup, Illumination,GFP 17%,Core,AutoShutter,1

# Preset: RFP 50%
ConfigGroup, Illumination,RFP 50%,TIFilterBlock1,Label,5-mChe
ConfigGroup, Illumination,RFP 50%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,RFP 50%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,RFP 50%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,RFP 50%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,RFP 50%,SpectraX,Green_Enable,1
ConfigGroup, Illumination,RFP 50%,SpectraX,Green_Level,50
ConfigGroup, Illumination,RFP 50%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,RFP 50%,SpectraX,Red_Level,100
ConfigGroup, Illumination,RFP 50%,SpectraX,State,0
ConfigGroup, Illumination,RFP 50%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,RFP 50%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,RFP 50%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,RFP 50%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,RFP 50%,Core,AutoShutter,1
ConfigGroup, Illumination,RFP 50%,Core,Shutter,SpectraX

# Preset: mCherry 9%
ConfigGroup, Illumination,mCherry 9%,TIFilterBlock1,Label,5-mChe
ConfigGroup, Illumination,mCherry 9%,SpectraX,Blue_Enable,0
ConfigGroup, Illumination,mCherry 9%,SpectraX,Blue_Level,100
ConfigGroup, Illumination,mCherry 9%,SpectraX,Cyan_Enable,0
ConfigGroup, Illumination,mCherry 9%,SpectraX,Cyan_Level,0
ConfigGroup, Illumination,mCherry 9%,SpectraX,Green_Enable,1
ConfigGroup, Illumination,mCherry 9%,SpectraX,Green_Level,9
ConfigGroup, Illumination,mCherry 9%,SpectraX,Red_Enable,0
ConfigGroup, Illumination,mCherry 9%,SpectraX,Red_Level,100
ConfigGroup, Illumination,mCherry 9%,SpectraX,State,0
ConfigGroup, Illumination,mCherry 9%,SpectraX,Teal_Enable,0
ConfigGroup, Illumination,mCherry 9%,SpectraX,Teal_Level,100
ConfigGroup, Illumination,mCherry 9%,SpectraX,Violet_Enable,0
ConfigGroup, Illumination,mCherry 9%,SpectraX,Violet_Level,100
ConfigGroup, Illumination,mCherry 9%,Core,Shutter,SpectraX
ConfigGroup, Illumination,mCherry 9%,Core,AutoShutter,1


# Group: Emission Filter
# Preset: 2-CFP
ConfigGroup,Emission Filter,2-CFP,TIFilterBlock1,Label,2-CFP

# Preset: 3-GFPHQ
ConfigGroup,Emission Filter,3-GFPHQ,TIFilterBlock1,Label,3-GFPHQ

# Preset: 5-mChe
ConfigGroup,Emission Filter,5-mChe,TIFilterBlock1,Label,5-mChe

# Preset: 4-YFPhq
ConfigGroup,Emission Filter,4-YFPhq,TIFilterBlock1,Label,4-YFPhq

# Preset: 6------
ConfigGroup,Emission Filter,6------,TIFilterBlock1,Label,6------

# Preset: 1-DAPI
ConfigGroup,Emission Filter,1-DAPI,TIFilterBlock1,Label,1-DAPI


# Group: Light Path
# Preset: 2-Left100
ConfigGroup,Light Path,2-Left100,TILightPath,Label,2-Left100

# Preset: 3-Right100
ConfigGroup,Light Path,3-Right100,TILightPath,Label,3-Right100

# Preset: 1-Eye100
ConfigGroup,Light Path,1-Eye100,TILightPath,Label,1-Eye100

# Preset: 4-Left80
ConfigGroup,Light Path,4-Left80,TILightPath,Label,4-Left80


# Group: PFS State
# Preset: On
ConfigGroup,PFS State,On,TIPFSStatus,State,On

# Preset: Off
ConfigGroup,PFS State,Off,TIPFSStatus,State,Off


# Group:  Objective
# Preset: 60x
ConfigGroup, Objective,60x,TINosePiece,Label,3-Plan Apo 60x NA 1.40 Oil
ConfigGroup, Objective,60x,TICondenserCassette,Label,2-Ph1

# Preset: 10x
ConfigGroup, Objective,10x,TINosePiece,Label,1-Plan Fluor 10x NA 0.30 Dry
ConfigGroup, Objective,10x,TICondenserCassette,Label,2-Ph1

# Preset: 100x
ConfigGroup, Objective,100x,TINosePiece,Label,2-Plan Apo 100x NA 1.45 Oil
ConfigGroup, Objective,100x,TICondenserCassette,Label,3-Ph3


# Group: Condenser
# Preset: 2-Ph1
ConfigGroup,Condenser,2-Ph1,TICondenserCassette,Label,2-Ph1

# Preset: 1------
ConfigGroup,Condenser,1------,TICondenserCassette,Label,1------

# Preset: 5------
ConfigGroup,Condenser,5------,TICondenserCassette,Label,5------

# Preset: 3-Ph3
ConfigGroup,Condenser,3-Ph3,TICondenserCassette,Label,3-Ph3

# Preset: 4-MC1
ConfigGroup,Condenser,4-MC1,TICondenserCassette,Label,4-MC1



# PixelSize settings
# Resolution preset: 60x
ConfigPixelSize,60x,TINosePiece,Label,3-Plan Apo 60x NA 1.40 Oil
PixelSize_um,60x,0.1072

# Resolution preset: 10x
ConfigPixelSize,10x,TINosePiece,Label,1-Plan Fluor 10x NA 0.30 Dry
PixelSize_um,10x,0.6533

# Resolution preset: 100x
ConfigPixelSize,100x,TINosePiece,Label,2-Plan Apo 100x NA 1.45 Oil
PixelSize_um,100x,0.065


